# Generated by Configurator on Tue Feb 19 13:27:00 CET 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,Ti2,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,DiaLamp,NikonTi2,DiaLamp

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2
Parent,XYStage,Ti2
Parent,FilterTurret1,Ti2
Parent,Turret1Shutter,Ti2
Parent,LightPath,Ti2
Parent,DiaLamp,Ti2

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,0

# Roles
Property,Core,Shutter,Turret1Shutter
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# FilterTurret1
Label,FilterTurret1,5,6-
Label,FilterTurret1,4,5-
Label,FilterTurret1,3,4-
Label,FilterTurret1,2,3-
Label,FilterTurret1,1,2-
Label,FilterTurret1,0,1-
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

